// "toskelnrrd.txt"
//
// This macro batch processes all the lsm files in a folder
// saving them as nrrd or pic files.
// Limitations/Specifics
// 1) Only works with Fiji
// 2) No attempt is made to reorder channels
// 3) Uses file locking when called with a directory as input, but NOT when
//    called with a specific input file
//    (in which case we assume that someone else is handling this issue)
//
// (Slightly) Adapted by Greg Jefferis from code at
// http://rsb.info.nih.gov/ij/macros/BatchProcessFolders.txt

// jefferis@gmail.com

requires("1.42k");
file = getArgument;
dir=""
outputDir=""
outputformat="nrrd" // or pic
useLocksAndCheckOutput = true; // by default
threshold=0;
fileregex=".*";
thresholdfirst=true;

// Set up for headless image opening
run("Bio-Formats Macro Extensions");
setBatchMode(true);

// 1) Check what arguments we've received
// --------------------------------------
//print("file = "+file);
if (file!=""){
	arg = split(file,",");
	if (arg.length<2 || arg.length>5) {
	  print("Wrong number of arguments!")
		exit();
	}
	if(arg.length>=3) {
		threshold=arg[2];
	}
	if(arg.length>=4) {
		if(arg[3]>0) {
		  thresholdfirst=true;
		  print("Will apply threshold before rescaling!");
		} else {
		  thresholdfirst=false;
		  print("Will apply threshold after rescaling!");
		}
	}
	if(arg.length==5) {
		fileregex=arg[4];
	}

	// ... now deal with directories
	if(arg[0]=="" || arg[1]==""){
		exit();
	} else {
		outputDir=arg[1];
		if(!endsWith(outputDir,"/")) outputDir=outputDir+"/";

		if(File.isDirectory(arg[0])) {
// we're dealing with a directory
			dir=arg[0];
			if(!endsWith(dir,"/")) dir=dir+"/";
		} else {
// single file
			useLocksAndCheckOutput = false;
			dir=File.getParent(arg[0])+"/";
			file=File.getName(arg[0]);
			processFile(dir,outputDir,file);
			exit();
		}
	}
}

// 2) Ask for in/output dirs if required
// --------------------------------------

if(dir=="") dir = getDirectory("Choose a stacks directory");
if(outputDir=="") outputDir = getDirectory("Choose output directory");

// 3) Process files in the chosen directories
// --------------------------------------
count = 0;
countFiles(dir);
print("Total files: "+count);
n = 0;
processFiles(dir, outputDir);

// 4) Function definitions
// --------------------------------------

function countFiles(dir) {
		list = getFileList(dir);
	for (i=0; i<list.length; i++) {
		if (endsWith(list[i], "/"))
            countFiles(""+dir+list[i]);
	else
		count++;
	}
}

function processFiles(dir,outputDir) {
	list = getFileList(dir);
	shuffle(list);
    for (i=0; i<list.length; i++) {
        if (endsWith(list[i], "/"))
            processFiles(""+dir+list[i], outputDir);
        else {
		showProgress(n++, count);
              processFile(dir,outputDir,list[i]);
        }
    }
}

function processFile(dir,outputDir,file) {
	if (!endsWith(file, ".lock") && !endsWith(file, "skel.nrrd") && matches(file, fileregex)) {
		path = dir+file;
		print("Processing file "+file);
		outfilestem=outputDir+substring(file, 0, lastIndexOf(file, ".")) + "_skel";
		outfilepath=outfilestem + "." + outputformat;
		if(useLocksAndCheckOutput){
			// Check if output already exists
			if(File.exists(outfilepath)){
				print("Skipping file: " + file + " since " + outfilepath + " already exists");
				return;
			} else {
				print("Processing file: " + file + " to make " + outfilepath);
			}
			// Check if someone is already working on this
			lockpath=path+'.lock';
			if(File.exists(lockpath)){
				print("Skipping file: " + file + " since someone else is working on it");
				return;
			}
			File.saveString("",lockpath);
		}

		open(path);
		if(thresholdfirst){
		  processImage2();
		} else {
		  processImage();
		}
		setKeyDown("alt");
		run("Nrrd ... ", "nrrd=["+outfilepath+"]");
		setKeyDown("none");
		closeall();
		if(useLocksAndCheckOutput){
			File.delete(lockpath);
		}
	}
}

function closeall() {
  while (nImages>0) { 
    selectImage(nImages); 
    close(); 
  }
}

function processImage() {
  //run("Scale...", "x=0.5 y=0.5 z=0.5 interpolation=Bilinear average process");
  getDimensions(width, height, channels, slices, frames);
  scalefac=0.5;
  iwidth=round(width*scalefac);
  iheight=round(height*scalefac);
  islices=round(slices*scalefac);
  run("Size...", "width="+iwidth+" height="+iheight+" depth="+islices+" average interpolation=Bilinear");
  thri=parseInt(threshold);
  if(isNaN(thri)) {
    setAutoThreshold(threshold+" dark stack");
    run("Convert to Mask", "method="+threshold+" background=Dark black");
  } else {
    if(thri>0) {
      getMinAndMax(min, max);
      setThreshold(thri, max);
      run("Convert to Mask", "background=Dark black");
    }
  }
  run("Skeletonize (2D/3D)");
}

function processImage2() {
  print("Entering processImage2!");
  thri=parseInt(threshold);
  print("thri="+thri);
  if(isNaN(thri)) {
    print("setAutoThreshold!");
    setAutoThreshold(threshold+" dark stack");
    run("Convert to Mask", "method="+threshold+" background=Dark black");
  } else {
    if(thri>0) {
      getMinAndMax(min, max);
      print("setThreshold("+thri+","+max+")");
      setThreshold(thri, max);
      run("Convert to Mask", "background=Dark black");
    }
  }
  //run("Scale...", "x=0.5 y=0.5 z=0.5 interpolation=Bilinear average process");
  getDimensions(width, height, channels, slices, frames);
  scalefac=0.5;
  iwidth=round(width*scalefac);
  iheight=round(height*scalefac);
  islices=round(slices*scalefac);
  run("Size...", "width="+iwidth+" height="+iheight+" depth="+islices+" average interpolation=Bilinear");
  // re-threshold at 50% of label value
  setThreshold(128, 255);
  print("setThreshold(128,255)");
  run("Convert to Mask", "background=Dark black");
  run("Skeletonize (2D/3D)");
}

function shuffle(array) {
   n = array.length;  // The number of items left to shuffle (loop invariant).
   while (n > 1) {
      k = randomInt(n);     // 0 <= k < n.
      n--;                  // n is now the last pertinent index;
      temp = array[n];  // swap array[n] with array[k] (does nothing if k==n).
      array[n] = array[k];
      array[k] = temp;
   }
}

// returns a random number, 0 <= k < n
function randomInt(n) {
   return n * random();
}
